PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  backgroundFit = fill
  backgroundImg = images/background.bmp
  expName = E_forgetting_curve
  keyboardBackend = ioHub
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Routines
  Routine Start
  Routine trial_2
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        How emotional was the picture on the bottom?
    ButtonComponent button_3
      bold = False
      fillColor = 0.0000, 0.0000, 0.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.2, -0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 0
      text = not really
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    ButtonComponent button_4
      bold = False
      fillColor = 0.0000, 0.0000, 0.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.2, -0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 0
      text = very much
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  Routine encoding
    PolygonComponent fixationcross
      fillColor = white
      lineWidth = 0.00001
      shape = cross
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent image
      image = data/erholungswald-2048x1536.jpeg
      pos = (0, 0.2)
      size = (0.6, 0.45)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    ImageComponent image_2
      image = data/erholungswald-2048x1536.jpeg
      pos = (-0.5, -0.2)
      size = (0.36, 0.3)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 2
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    ImageComponent image_3
      image = data/erholungswald-2048x1536.jpeg
      pos = (0, 0.2)
      size = (0.6, 0.45)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 2
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    ImageComponent image_4
      image = data/erholungswald-2048x1536.jpeg
      pos = (-0.5, -0.2)
      size = (0.36, 0.3)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 2
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 10
      text = How emotional was the picture on the top?
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    ButtonComponent button
      bold = False
      borderColor = 0.9608, 0.8431, 0.6863
      fillColor = 0.0000, 0.0000, 0.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.2, -0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 10
      text = not really
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    ButtonComponent button_2
      bold = False
      borderColor = 0.9608, 0.8431, 0.6863
      fillColor = 0.0000, 0.0000, 0.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.2, -0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 10
      text = very much
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  Routine introduction
    TextboxComponent introduction_text
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.3255, 0.3255, 0.3255
      letterHeight = 0.037
      lineSpacing = 1
      pos = (0, 0.12)
      size = (1.5, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Willkommen zur Online-Version des Experiments! Die Online-Aufgabe ist ähnlich wie die zweite Aufgabe, die Sie vor Ort gemacht haben. Sie bekommen eine Szene dargestellt und sollen anschließend jenes Objekt durch Anklicken auswählen, das Ihrer Erinnerung nach mit der Szene verbunden war. Allerdings sehen Sie danach nicht mehr die richtige Lösung. Es handelt sich hierbei um die Verknüpfungen, die Sie beim zweiten Termin vor Ort gelernt haben.
        Diese Aufgabe sollen Sie das erste Mal am nächsten Tag und dann alle drei Tage durchführen; d.h. über die kommenden 2 Wochen hinweg insgesamt 5-mal.
    TextboxComponent text_introduction_button
      bold = False
      borderColor = 0.3255, 0.3255, 0.3255
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.3255, 0.3255, 0.3255
      letterHeight = 0.04
      pos = (0, -0.3)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      text = Drücken Sie hier, um anzufangen
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    MouseComponent mouse_1
      clickable = text_introduction_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = THREE_POINTS
    textColor = white
    units = from exp settings
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = THREE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  Routine Ende
  Routine end
    TextboxComponent textbox_2
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.3255, 0.3255, 0.3255
      letterHeight = 0.05
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
      text = Der Durchgang ist beendet. Drücken Sie auf den roten Kreis, um das Experiment zu beenden.
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    PolygonComponent polygon
      fillColor = red
      lineColor = red
      pos = (0.75, 0)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      clickable = polygon
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine recognition
    CodeComponent behavioral
      Code Type = Auto->JS
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      Begin Experiment:
        score = 0
      End Routine:
        ID = expInfo['participant']
        condition = 'e'
        stage = 'main'
        round0 = 0
        scene = Picture_Recognition
        correct_object = Picture_Recognition_2

        if mouse.clicked_name[0] == 'image_left':
            memory_resp = Q1_l
        elif mouse.clicked_name[0] == 'image_middle':
            memory_resp = Q1_m
        elif mouse.clicked_name[0] == 'image_right':
            memory_resp = Q1_r
        else:
            raise RuntimeError
        memory_rt = mouse.time[0]

        if memory_resp == correct_object:
            accuracy = 1
        else:
            accuracy = 0
        x = mouse.x
        y = mouse.y

        if accuracy == 1:
            this_feedback = 'Korrekt'
            score += 1
        else:
            this_feedback = 'Nicht korrekt'

        trials.addData('condition', condition)
        trials.addData('stage', stage)
        trials.addData('scene', scene)
        trials.addData('correct object', correct_object)
        trials.addData('left option', Q1_l)
        trials.addData('middle option', Q1_m)
        trials.addData('right option', Q1_r)
        trials.addData('memory resp', memory_resp)
        trials.addData('memory rt', memory_rt)
        trials.addData('accuracy', accuracy)
        trials.addData('score', score)
        trials.addData('x mouse', x)
        trials.addData('y mouse', y)
        trials.addData('internal lure', internal_lure)
        trials.addData('external lure', external_lure)
    TextboxComponent question
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.3255, 0.3255, 0.3255
      letterHeight = 0.05
      lineSpacing = 1.2
      pos = (0, 0.2)
      size = (0.75, 0.2)
      startVal [time (s)] = 2.1
      text = Welches Bild war rechts unten?
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    ImageComponent image_top
      image [set every repeat] = $Picture_Recognition
      pos = (0, 0.2)
      size = (0.6, 0.45)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.6
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    ImageComponent image_left
      image [set every repeat] = $Q1_l
      pos = (-0.6, -0.2)
      size = (0.5, 0.4)
      startVal [time (s)] = 2.1
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    ImageComponent image_middle
      image [set every repeat] = $Q1_m
      pos = (0, -0.2)
      size = (0.5, 0.4)
      startVal [time (s)] = 2.1
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    ImageComponent image_right
      image [set every repeat] = $Q1_r
      pos = (0.6, -0.2)
      size = (0.5, 0.4)
      startVal [time (s)] = 2.1
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    MouseComponent mouse
      clickable = image_left,image_middle,image_right
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 2.1
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Flow
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Excel_forgetting_curve_emotional.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Picture_Recognition': 'images/scenes/friedhof.png', 'Picture_Recognition_2': 'images/objects/friedhofsstatue.png', 'Q1_l': 'images/objects/friedhofsstatue.png', 'Q1_m': 'images/objects/urne.png', 'Q1_r': 'images/objects/gruselige_puppe.png', 'Feedback_l': 'Korrekt', 'Feedback_m': 'Nicht_korrekt', 'Feedback_r': 'Nicht_korrekt', 'internal_lure': 'images/objects/gruselige_puppe.png', 'external_lure': 'images/objects/urne.png'},
      {'Picture_Recognition': 'images/scenes/tsunami.png', 'Picture_Recognition_2': 'images/objects/kaputter_burostuhl.png', 'Q1_l': 'images/objects/kaputter_burostuhl.png', 'Q1_m': 'images/objects/zerbrochene_uhr.png', 'Q1_r': 'images/objects/durchnasster_fussball.png', 'Feedback_l': 'Korrekt', 'Feedback_m': 'Nicht_korrekt', 'Feedback_r': 'Nicht_korrekt', 'internal_lure': 'images/objects/zerbrochene_uhr.png', 'external_lure': 'images/objects/durchnasster_fussball.png'},
      {'Picture_Recognition': 'images/scenes/schlachthaus.png', 'Picture_Recognition_2': 'images/objects/messer.png', 'Q1_l': 'images/objects/blutiger_handschuh.png', 'Q1_m': 'images/objects/messer.png', 'Q1_r': 'images/objects/blutige_sage.png', 'Feedback_l': 'Nicht_korrekt', 'Feedback_m': 'Korrekt', 'Feedback_r': 'Nicht_korrekt', 'internal_lure': 'images/objects/blutige_sage.png', 'external_lure': 'images/objects/blutiger_handschuh.png'},
      {'Picture_Recognition': 'images/scenes/kaputter_zug.png', 'Picture_Recognition_2': 'images/objects/kaputter_koffer.png', 'Q1_l': 'images/objects/kaputter_koffer.png', 'Q1_m': 'images/objects/verunfalltes_auto.png', 'Q1_r': 'images/objects/zerissene_kleider.png', 'Feedback_l': 'Korrekt', 'Feedback_m': 'Nicht_korrekt', 'Feedback_r': 'Nicht_korrekt', 'internal_lure': 'images/objects/verunfalltes_auto.png', 'external_lure': 'images/objects/zerissene_kleider.png'}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
    Routine recognition
  LoopTerminator trials
  Routine end
